<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:ubx="clr-namespace:EmotionalCities.uBlox;assembly=EmotionalCities.uBlox"
                 xmlns:lsl="clr-namespace:EmotionalCities.Lsl;assembly=EmotionalCities.Lsl"
                 xmlns:p3="clr-namespace:NetMQ;assembly=NetMQ"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:pluma="clr-namespace:EmotionalCities.Pluma;assembly=EmotionalCities.Pluma"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p4="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:pupil="clr-namespace:EmotionalCities.Pupil;assembly=EmotionalCities.Pupil"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DataPath" Category="MetaData" />
        <Property Name="City" Category="MetaData" />
        <Property Name="CityPath" Category="MetaData" />
        <Property Name="SubjectID" Category="MetaData" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ExperimentMetadata</Name>
        <Description>Specifies mandatory metadata for the collected dataset.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DataPath" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetFiles,sys:String">
              <MemberName>Path</MemberName>
              <Value>C:\OutdoorData</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Path to the root data folder must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="City" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Brussels</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Non-empty city must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CityPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>EGG</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Non-empty city path must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SubjectID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>BID</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Non-empty subject ID must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}_{2}_sub-{3}</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Value + "_" + TimeStamp.UtcDateTime.ToString("yyyy-MM-ddTHHmmssZ")</scr:Expression>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>\</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpSoftwareLogging</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarpMuxAddress.bonsai">
              <LogName>Streams</LogName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarpReadDump.bonsai">
              <LogName>StreamReadDump.bin</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Mat">
              <rx:Name>MicrophoneData</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogMicrophone.bonsai">
              <LogName>Microphone.bin</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(p1:AccelerometerData,sys:Double,sys:Double)">
              <rx:Name>AccelerometerData</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogAccelerometer.bonsai">
              <LogName>Accelerometer.csv</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(ubx:UbxPacket,sys:Double)">
              <rx:Name>UbxEvents</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogUBX.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,sys:Double)">
              <rx:Name>EmpaticaEvents</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogEmpaticaHarp.bonsai">
              <LogName>empatica_harp_ts.csv</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(lsl:Timestamped(sys:Int32))">
              <rx:Name>EegMarker</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogEegMarkers.bonsai">
              <LogName>eeg_markers.csv</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Int32),p3:NetMQMessage,sys:String)">
              <rx:Name>PupilSensorLogging</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogPupilSensor.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(p2:IplImage)">
              <rx:Name>PupilDecodedFrames</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Value != null ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>209</harp:Address>
                <harp:PayloadType>TimestampedU64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PupilDecodedFrames</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>DropNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogVideo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>pupil_video.avi</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\OutdoorData\Brussels_EGG_sub-BID_2024-11-27T172435Z\\pupil_video.avi</cv:FileName>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PupilDecodedFrames</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>DropNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>300</harp:Address>
                <harp:PayloadType>TimestampedU64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="36" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Acquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
              <Property Name="Upper" />
              <Property Name="Lower" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Pluma.bonsai">
              <DueTime>PT0.1S</DueTime>
              <Lower>8</Lower>
              <Upper>16</Upper>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\Microphone.bonsai" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TinkerForge.bonsai" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\Pupil.bonsai">
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              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AdaFruitAcc.bonsai">
              <PortName>COM16</PortName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\UBX.bonsai" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\Empatica.bonsai" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Wind.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\EEG.bonsai" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>LDR</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Debug tools</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Pupil Debug</Name>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MinimumDistanceMeters" Category="GPS" />
        <Property Name="PathOriginLat" Category="GPS" />
        <Property Name="PathOriginLon" Category="GPS" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ControlPanel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>EEG</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SynchPulse</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="EegSample" Category="Eeg" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="EegTimeout" Category="Eeg" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>EEG</p1:Name>
                      <p1:Interval>PT1M3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EEgKeyboardStream</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="p4:ObjectTextVisualizer" />
                  </Expression>
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Pluma</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PlumaEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="PlumaSample" Category="Pluma" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="PlumaTimeout" Category="Pluma" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Pluma</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ECG_Viz</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PlumaEvents</Name>
                        </Expression>
                        <Expression xsi:type="pluma:Parse">
                          <harp:Register xsi:type="pluma:TimestampedEcgAndAnalogData" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Ecg</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Slice">
                            <rx:Start>0</rx:Start>
                            <rx:Step>4</rx:Step>
                            <rx:Stop xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:FrequencyFilter">
                            <dsp:SampleRate>250</dsp:SampleRate>
                            <dsp:Cutoff1>1</dsp:Cutoff1>
                            <dsp:Cutoff2>0</dsp:Cutoff2>
                            <dsp:KernelLength>60</dsp:KernelLength>
                            <dsp:FilterType>HighPass</dsp:FilterType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PathOriginLat" />
              <Property Name="PathOriginLon" />
              <Property Name="MinimumDistanceMeters" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GPSDistance</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PathOriginLat" />
                    <Property Name="PathOriginLon" />
                    <Property Name="MinimumDistanceMeters" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GpsDistance</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>UbxEvents</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>MessageId</Selector>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="ubx:MessageId">
                                  <Value>NAV_HPPOSLLH</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:ParseNavHPPOSLLH">
                            <p1:Offset>6</p1:Offset>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HPPosLLH</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Lat" DisplayName="PathOriginLat" Category="GPS" />
                          <Property Name="Lon" DisplayName="PathOriginLon" Category="GPS" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:LatLongDistance">
                            <p1:Lat>50.8328358</p1:Lat>
                            <p1:Lon>4.3275779</p1:Lon>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>GpsDistance</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="MinimumDistanceMeters" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="MinimumDistanceMeters" Category="GPS" />
                              </Expression>
                              <Expression xsi:type="LessThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>200</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:StreamingStatus">
                            <p1:Name>Start Point</p1:Name>
                            <p1:Interval>PT3S</p1:Interval>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GpsDistance</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Microphone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MicrophoneData</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="MicrophoneSample" Category="Microphone" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="MicrophoneTimeout" Category="Microphone" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Microphone</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MicrophoneData</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Pupil</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilSensorLogging</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="PupilSample" Category="Pupil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="PupilTimeout" Category="Pupil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Pupil</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilGaze</Name>
                  </Expression>
                  <Expression xsi:type="viz:RollingGraphBuilder">
                    <viz:SymbolType>None</viz:SymbolType>
                    <viz:LineWidth>1</viz:LineWidth>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilSensorLogging</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item3</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>Gaze</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="pupil:DecodePupilGaze" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PupilGaze</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Last.Buffer</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it</scr:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="11" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Empatica</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EmpaticaEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="EmpaticaSample" Category="Empatica" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="EmpaticaTimeout" Category="Empatica" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Empatica</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EmpaticaEvents</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it.Contains("E4_Gsr")</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Parse">
                    <Pattern>%s %d %d</Pattern>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="12" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Wind</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>WindMessage</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Address</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual">
                          <Operand xsi:type="IntProperty">
                            <Value>246</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="LessThanOrEqual">
                          <Operand xsi:type="IntProperty">
                            <Value>252</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="WindSample" Category="Wind" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="WindTimeout" Category="Wind" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Wind</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>246</harp:Address>
                      <harp:PayloadType>Float</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>247</harp:Address>
                      <harp:PayloadType>Float</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>248</harp:Address>
                      <harp:PayloadType>Float</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it.item1 as NorthWindSpeed,
it.Item2 as EastWindSpeed, 
it.Item3 as GustWindSpeed)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="viz:RollingGraphBuilder">
                    <viz:SymbolType>None</viz:SymbolType>
                    <viz:LineWidth>1</viz:LineWidth>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="17" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source3" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Accelarometer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AccelerometerData</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="AccelerometerSample" Category="Accelerometer" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="AccelerometerTimeout" Category="Accelerometer" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Accelerometer</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AccelerometerData</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Orientation.X,Item1.Orientation.Y,Item1.Orientation.Z</Selector>
                  </Expression>
                  <Expression xsi:type="viz:RollingGraphBuilder">
                    <viz:SymbolType>None</viz:SymbolType>
                    <viz:LineWidth>1</viz:LineWidth>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>TinkerForge</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Tinkerforge</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="TinkerforgeSample" Category="Tinkerforge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="TinkerforgeTimeout" Category="Tinkerforge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>Tinkerforge</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Tinkerforge</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>243</harp:Address>
                      <harp:PayloadType>S32</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>GPS</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>UbxEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="UbxSample" Category="Ubx" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT1S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Interval" DisplayName="UbxTimeout" Category="Ubx" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StreamingStatus">
                      <p1:Name>UBX</p1:Name>
                      <p1:Interval>PT3S</p1:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HPPosLLH</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Lat,Lon</Selector>
                  </Expression>
                  <Expression xsi:type="viz:RollingGraphBuilder">
                    <viz:SymbolType>None</viz:SymbolType>
                    <viz:LineWidth>1</viz:LineWidth>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>2</viz:ColumnCount>
                    <viz:RowCount>1</viz:RowCount>
                    <viz:ColumnStyles>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>10</viz:Width>
                      </viz:ColumnStyle>
                      <viz:ColumnStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Width>90</viz:Width>
                      </viz:ColumnStyle>
                    </viz:ColumnStyles>
                    <viz:RowStyles />
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:Name>EmotionalCities</viz:Name>
              <viz:ColumnCount>1</viz:ColumnCount>
              <viz:RowCount>10</viz:RowCount>
              <viz:ColumnStyles />
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>BigPupil</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilDecodedFrames</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>DropNull</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it == null</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilDecodedFrames</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilGaze</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>Pupil</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>BigECG_Viz</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PlumaEvents</Name>
                  </Expression>
                  <Expression xsi:type="pluma:Parse">
                    <harp:Register xsi:type="pluma:TimestampedEcgAndAnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Ecg</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>0</rx:Start>
                      <rx:Step>4</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FrequencyFilter">
                      <dsp:SampleRate>250</dsp:SampleRate>
                      <dsp:Cutoff1>1</dsp:Cutoff1>
                      <dsp:Cutoff2>0</dsp:Cutoff2>
                      <dsp:KernelLength>60</dsp:KernelLength>
                      <dsp:FilterType>HighPass</dsp:FilterType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>ECG</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>BigGPS</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GpsDistance</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>GPS Distance</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>BigMicrophone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MicrophoneData</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Audio</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Audio</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:SelectChannels">
                            <dsp:Channels>
                              <dsp:int>0</dsp:int>
                            </dsp:Channels>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Abs" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Average" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Val0</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:SelectChannels">
                            <dsp:Channels>
                              <dsp:int>1</dsp:int>
                            </dsp:Channels>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Abs" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Average" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Val0</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="12" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="viz:RollingGraphBuilder">
                    <viz:SymbolType>None</viz:SymbolType>
                    <viz:LineWidth>1</viz:LineWidth>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>Microphone</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TabControlBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans>
                <gui:CellSpan ColumnSpan="1" RowSpan="2" />
              </gui:CellSpans>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="21" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="21" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="21" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="21" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="21" Label="Source5" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="21" Label="Source6" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="21" Label="Source7" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="21" Label="Source8" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source9" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source10" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="33" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="33" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="31" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="31" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source3" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source3" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>