<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:pluma="clr-namespace:EmotionalCities.Pluma;assembly=EmotionalCities.Pluma"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:NetMQ;assembly=NetMQ"
                 xmlns:lsl="clr-namespace:EmotionalCities.Lsl;assembly=EmotionalCities.Lsl"
                 xmlns:p3="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>SynchronizeClock</Name>
        <Description>Synchronizes harp device with system UTC time</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="pluma:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM5</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:SynchronizeTimestamp" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>acquisition</Name>
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>ExperimentMetadata</Name>
        <Description>Specifies mandatory metadata for the collected dataset.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DataPath" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetFiles,sys:String">
              <MemberName>Path</MemberName>
              <Value>C:\IndoorData</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Path to the root data folder must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="City" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>NGR</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Non-empty city must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CityPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>LAB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Non-empty city path must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SubjectID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EnsureIdentifier">
                <p1:Message>Non-empty subject ID must be specified.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}_{2}_sub-{3}</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Value + "_" + TimeStamp.UtcDateTime.ToString("yyyy-MM-ddTHHmmssZ")</scr:Expression>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>\</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpSoftwareLogging</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarpMuxAddress.bonsai">
              <LogName>Streams</LogName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarpReadDump.bonsai">
              <LogName>StreamReadDump.bin</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(p1:AccelerometerData,sys:Double,sys:Double)">
              <rx:Name>AccelerometerData</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogAccelerometer.bonsai">
              <LogName>Accelerometer.csv</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,sys:Double)">
              <rx:Name>EmpaticaEvents</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogEmpaticaHarp.bonsai">
              <LogName>empatica_harp_ts.csv</LogName>
            </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>ITI</rx:Name>
            </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item1</rx:KeySelector>
                    <rx:ElementSelector>Item2</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
                    <LogName>ITI</LogName>
                    <StartIndex>0</StartIndex>
                    <ExpectedIndices>3</ExpectedIndices>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
                    <rx:Name>NewScene</rx:Name>
                        </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item1</rx:KeySelector>
                    <rx:ElementSelector>Item2</rx:ElementSelector>
                        </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
                    <LogName>NewScene</LogName>
                    <StartIndex>0</StartIndex>
                    <ExpectedIndices>3</ExpectedIndices>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(lsl:Timestamped(sys:Int32))">
              <rx:Name>EegMarker</rx:Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogEegMarkers.bonsai">
              <LogName>eeg_markers.csv</LogName>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>OmniceptGlia</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
              <LogName>Glia</LogName>
              <StartIndex>0</StartIndex>
              <ExpectedIndices>3</ExpectedIndices>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>VRTransform</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
              <LogName>VRTransform</LogName>
              <StartIndex>0</StartIndex>
              <ExpectedIndices>3</ExpectedIndices>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>UnityRecorderStatus</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
              <LogName>UnityRecorder</LogName>
              <StartIndex>0</StartIndex>
              <ExpectedIndices>3</ExpectedIndices>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:IplImage">
              <rx:Name>VRImage</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogVideo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>VRImage.avi</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FrameRate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\IndoorData\NGR_LAB_sub-01_2024-07-31T185605Z\\VRImage.avi</cv:FileName>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>25</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>PointToOriginWorld</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
              <LogName>Unity_PointToOriginWorld</LogName>
              <StartIndex>0</StartIndex>
              <ExpectedIndices>3</ExpectedIndices>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>PointToOriginMap</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
              <LogName>Unity_PointToOriginMap</LogName>
              <StartIndex>0</StartIndex>
              <ExpectedIndices>3</ExpectedIndices>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:String,p2:NetMQMessage)">
              <rx:Name>GeoReference</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
              <rx:ElementSelector>Item2</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMQLogging.bonsai">
              <LogName>Unity_GeoReference</LogName>
              <StartIndex>0</StartIndex>
              <ExpectedIndices>3</ExpectedIndices>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Acquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
              <Property Name="Upper" />
              <Property Name="Lower" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Pluma.bonsai">
              <DueTime>PT0.1S</DueTime>
              <Lower>8</Lower>
              <Upper>16</Upper>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AdaFruitAcc.bonsai">
              <PortName>COM16</PortName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Empatica.bonsai">
              <DeviceId>02725A</DeviceId>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\EEG.bonsai" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Omnicept</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                      <zmq:Topic />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>First</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:ConvertToString" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StringToInt">
                      <p1:Topic>
                        <p1:string>EyeTracking</p1:string>
                        <p1:string>HeartRate</p1:string>
                        <p1:string>IMU</p1:string>
                        <p1:string>Mouth</p1:string>
                      </p1:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>215</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:GetOmniceptGliaTimestamp" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Harp Logging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Address" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="Address" />
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>215</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="3" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source2" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item3</Selector>
                              </Expression>
                              <Expression xsi:type="harp:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="harp:FormatMessagePayload">
                                  <harp:Address>215</harp:Address>
                                  <harp:PayloadType>TimestampedU64</harp:PayloadType>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="1" To="4" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Harp Logging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Address" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="Address" />
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>216</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="3" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source2" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item3</Selector>
                              </Expression>
                              <Expression xsi:type="harp:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="harp:FormatMessagePayload">
                                  <harp:Address>216</harp:Address>
                                  <harp:PayloadType>TimestampedU64</harp:PayloadType>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="1" To="4" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Harp Logging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Address" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="Address" />
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>217</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="3" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source2" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item3</Selector>
                              </Expression>
                              <Expression xsi:type="harp:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="harp:FormatMessagePayload">
                                  <harp:Address>217</harp:Address>
                                  <harp:PayloadType>TimestampedU64</harp:PayloadType>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="1" To="4" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Harp Logging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Address" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="Address" />
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>218</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="3" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source2" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item3</Selector>
                              </Expression>
                              <Expression xsi:type="harp:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="harp:FormatMessagePayload">
                                  <harp:Address>218</harp:Address>
                                  <harp:PayloadType>TimestampedU64</harp:PayloadType>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="1" To="4" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpSoftwareLogging</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="5" Label="Source2" />
                        <Edge From="3" To="5" Label="Source3" />
                        <Edge From="4" To="5" Label="Source4" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OmniceptGlia</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                      <Selector>Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:PublishSubject">
                      <Name>GliaHarp</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GliaHarp</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:GroupBy">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>HarpSoftwareLogging</Name>
                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source4" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OmniceptDebug</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                      <zmq:Topic>Mouth</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptMouthCamera" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Image</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeStamp</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HardwareTimeMicroSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>First</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:ConvertToString" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Buffer.Length</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>BufferSize</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                      <zmq:Topic>EyeTracking</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptEyeTracking" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\OmniceptStream.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>OmniceptSensorLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="harp:Format">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>HarpSoftwareLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Position</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.HardwareTimeMicroSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LeftEye</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PupilPosition.X</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PupilPosition.Y</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RightEye</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PupilPosition</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                      <zmq:Topic>HeartRate</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptHeartRate" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Rate</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\OmniceptStream.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>OmniceptSensorLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="harp:Format">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>HarpSoftwareLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.HardwareTimeMicroSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                      <zmq:Topic>IMU</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptIMU" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\OmniceptStream.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>OmniceptSensorLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="harp:Format">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>HarpSoftwareLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.HardwareTimeMicroSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Acceleration</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Gyroscope</Selector>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="19" Label="Source1" />
                  <Edge From="10" To="22" Label="Source1" />
                  <Edge From="10" To="23" Label="Source1" />
                  <Edge From="10" To="26" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="23" To="25" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="27" To="29" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="31" To="41" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="34" To="38" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="43" To="52" Label="Source1" />
                  <Edge From="43" To="53" Label="Source1" />
                  <Edge From="43" To="54" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="45" To="49" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Unity</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5558</zmq:ConnectionString>
                      <zmq:Topic>Position</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                    <Name>VRTransform</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>219</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ScreenCapture.bonsai">
                      <Name>VRImage</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                      <Name>UnityRecorderStatus</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="harp:Format">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>HarpSoftwareLogging</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
                      <zmq:Topic>NewScene</zmq:Topic>
                    </Combinator>
                  </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                    <Name>NewScene</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>225</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
                      <zmq:Topic>ITI</zmq:Topic>
                    </Combinator>
                  </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                    <Name>ITI</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>226</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
                      <zmq:Topic>PointToOriginWorld</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                    <Name>PointToOriginWorld</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>227</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
                      <zmq:Topic>PointToOriginMap</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                    <Name>PointToOriginMap</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>228</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
                      <zmq:Topic>Session</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ScreenCapture</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Buffer</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:ByteArrayToInt" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" />
                          <Property Name="CaptureRegion" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ScreenCapture</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="CaptureRegion" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="vid:ScreenCaptureStream">
                                  <vid:HideCursor>false</vid:HideCursor>
                                  <vid:CaptureRegion>
                                    <vid:X>303</vid:X>
                                    <vid:Y>113</vid:Y>
                                    <vid:Width>960</vid:Width>
                                    <vid:Height>540</vid:Height>
                                  </vid:CaptureRegion>
                                  <vid:FrameInterval>40</vid:FrameInterval>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Name" />
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>VRImage</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>Begin</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>0</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>End</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>1</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:TakeUntil" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="6" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="4" To="7" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="8" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source3" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GetIndex</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ElementIndex" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Index</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>220</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
                      <zmq:Topic>Georeference</zmq:Topic>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
                    <Name>GeoReference</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>211</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>UnityTransformDebug</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>VRTransform</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:ToUnityTransform" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Position</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Position</Selector>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>ForwardVector</Selector>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="viz:TableLayoutPanelBuilder">
                          <viz:ColumnCount>1</viz:ColumnCount>
                          <viz:RowCount>2</viz:RowCount>
                          <viz:ColumnStyles />
                          <viz:RowStyles />
                          <viz:CellSpans />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="8" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>VRTransform</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
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                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>LDR</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Debug tools</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Pupil Debug</Name>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SendPathToUnity</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VRTransform</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Publisher">
                <zmq:ConnectionString>tcp://localhost:5560</zmq:ConnectionString>
                <zmq:Topic>Path</zmq:Topic>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>