<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:5558</zmq:ConnectionString>
          <zmq:Topic>VRTransform</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>VRTransform</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>180</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
          <zmq:Topic>Georeference</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>Georeference</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>181</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
          <zmq:Topic>Session</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>Session</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>189</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ScreenCapture</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Buffer</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ByteArrayToInt" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
              <Property Name="CaptureRegion" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ScreenCapture</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="CaptureRegion" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="vid:ScreenCaptureStream">
                      <vid:HideCursor>false</vid:HideCursor>
                      <vid:CaptureRegion>
                        <vid:X>458</vid:X>
                        <vid:Y>111</vid:Y>
                        <vid:Width>914</vid:Width>
                        <vid:Height>516</vid:Height>
                      </vid:CaptureRegion>
                      <vid:FrameInterval>40</vid:FrameInterval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>VRImage</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Begin</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>End</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>182</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
          <zmq:Topic>NewScene</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>NewScene</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>185</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
          <zmq:Topic>ITI</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>ITI</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>186</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
          <zmq:Topic>PointToOriginWorld</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>PointToOriginWorld</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>187</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:6000</zmq:ConnectionString>
          <zmq:Topic>PointToOriginMap</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZeroMqStreamPublisher.bonsai">
        <Name>PointToOriginMap</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UnityTimestampMicroSeconds" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>188</harp:Address>
          <harp:PayloadType>TimestampedU64</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSoftwareLogging</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>